# Specify all necessary information to find and connect to each hardware
# device that will be used on any of the scopes.
hardware:
  daq:
    type: NI
  camera:
    -
      type: HamamatsuOrca
      serial_number: 302153
  filter_wheel:
    type: SutterFilterWheel
    port: COM10
    baudrate: 9600
    number_of_wheels: 1
  stage:
    -
      type: MP285
      port: COM2
      timeout: 0.25
      baudrate: 9600
      serial_number: 0000
      stages: None
    -
      type: syntheticstage
      port: COM9999
      timeout: 0.25
      baudrate: 9600
      serial_number: 0000
      stages: None
    -
      type: GalvoNIStage
      port: COM9999
      timeout: 0.25
      baudrate: 9600
      serial_number: 0000
      stages: None
  zoom:
    type: synthetic
    servo_id: 1
    port: COM18
    baudrate: 1000000

# Only one microscope can be active in the GUI at a time, but all microscopes will be accessible
microscopes:
  CTASLMv2:
    daq:
      hardware:
        name: daq
        type: NI
      sample_rate: 100000
      sweep_time: 0.2

      # triggers
      master_trigger_out_line: PCI6738/port0/line1 #3
      camera_trigger_out_line: /PCI6738/ctr0 #9/42
      trigger_source: /PCI6738/PFI0 #4

      # Digital Laser Outputs
      laser_port_switcher: PCI6738/port0/line0
      laser_switch_state: False

    camera:
      hardware:
        name: camera
        type: HamamatsuOrca
        serial_number: 302153
      x_pixels: 2048.0
      y_pixels: 2048.0
      flip_x: True
      flip_y: False
      pixel_size_in_microns: 6.5
      subsampling: [1, 2, 4]
      sensor_mode: Normal  # 12 for progressive, 1 for normal. Normal/Light-Sheet
      readout_direction: Top-to-Bottom  # Top-to-Bottom', 'Bottom-to-Top'
      lightsheet_rolling_shutter_width: 608
      defect_correct_mode: 1.0
      binning: 1x1
      readout_speed: 2.0
      trigger_active: 1.0
      trigger_mode: 1.0 # external light-sheet mode
      trigger_polarity: 2.0  # positive pulse
      trigger_source: 2.0  # 2 = external, 3 = software.
      exposure_time: 20 # Use milliseconds throughout.
      delay_percent: 20
      pulse_percent: 1
      line_interval: 0.000075
      display_acquisition_subsampling: 4
      average_frame_rate: 4.969
      frames_to_average: 1
      exposure_time_range:
        min: 1
        max: 1000
        step: 1
      x_pixels_step: 4
      y_pixels_step: 4
      x_pixels_min: 4
      y_pixels_min: 4
    remote_focus_device:
      hardware:
        name: remote_focus
        type: EquipmentSolutions # NI
        channel: PCI6738/ao2  #45/46
        comport: COM7
        min: -5
        max: 5
      delay_percent: 7.5
      ramp_rising_percent: 85
      ramp_falling_percent: 5.0
      amplitude: 0.7
      offset: 2.3
      smoothing: 0.0
    galvo:
      -
        hardware:
          name: daq
          type: NI
          channel: PCI6738/ao0  #10/11
          min: -5
          max: 5
        waveform: sawtooth
        frequency: 99.9
        amplitude: 2.5
        offset: 0.5
        duty_cycle: 50
        phase: 1.57079 # pi/2
    filter_wheel:
      hardware:
        name: filter_wheel
        type: SutterFilterWheel
        wheel_number: 1
      filter_wheel_delay: .030 # in seconds
      available_filters:
        Empty-1: 0
        525-30: 1
        600-52: 2
        670-30: 3
        647-LP: 4
        Empty-2: 5
        Empty-3: 6
        Empty-4: 7
    stage:
      hardware:
        -
          name: stage1
          type: MP285
          serial_number: 0000
          axes: [y, x, f]
          axes_mapping: [z, y, x]
          volts_per_micron: None
          axes_channels: None
          max: 25000
          min: 0
        -
          name: stage2
          type: syntheticstage
          serial_number: 0000
          axes: [theta]
          axes_mapping: [theta]
          max: 360
          min: 0
        -
          name: stage3
          type: GalvoNIStage
          serial_number: 0000
          axes: [z]
          axes_mapping: [PCI6738/ao6] #48/49
          volts_per_micron: 0.05*x
          max: 10
          min: 0
          distance_threshold: 20
          settle_duration_ms: 100
      x_max: 12500
      x_min: -12500
      y_max: 12500
      y_min: -12500
      z_max: 200
      z_min: 0
      f_max: 12500
      f_min: -12500
      theta_max: 360
      theta_min: 0

      x_step: 500
      y_step: 500
      z_step: 5
      theta_step: 30
      f_step: 500
      velocity: 1000

      x_offset: 0
      y_offset: 0
      z_offset: 0
      theta_offset: 0
      f_offset: 0
      coupled_axes:
        z: f
    zoom:
      hardware:
        name: zoom
        type: synthetic
        servo_id: 1
      position:
        36X: 0
      pixel_size:
        36X: 0.180
      stage_positions:
        BABB:
          f:
            36X: 0
    shutter:
      hardware:
        name: daq
        type: SyntheticShutter
        channel: PCI6738/port0/line10
        min: 0
        max: 5
    lasers:
      - wavelength: 488
        onoff:
          hardware:
            name: daq
            type: NI
            channel: PCI6738/port1/line5 # 7/41
            min: 0
            max: 5
        power:
          hardware:
            name: daq
            type: NI
            channel: PCI6738/ao8 #1  # 44/11
            min: 0
            max: 5
        type: Obis
        index: 0
        delay_percent: 10
        pulse_percent: 87
      - wavelength: 561
        onoff:
          hardware:
            name: daq
            type: NI
            channel: PCI6738/port1/line2 # 5/39
            min: 0
            max: 5
        power:
          hardware:
            name: daq
            type: NI
            channel: PCI6738/ao9 # 3  # 12/46
            min: 0
            max: 5
        type: Obis
        index: 1
        delay_percent: 10
        pulse_percent: 87
      - wavelength: 647
        onoff:
          hardware:
            name: daq
            type: NI
            channel: PCI6738/port1/line3 # 6/39
            min: 0
            max: 5
        power:
          hardware:
            name: daq
            type: NI
            channel: PCI6738/ao10 # 4  # 13/14
            min: 0
            max: 5
        type: Obis
        index: 2
        delay_percent: 10
        pulse_percent: 87

gui:
  channels:
    count: 5
    laser_power:
      min: 0
      max: 100
      step: 10
    exposure_time:
      min: 1
      max: 1000
      step: 5
    interval_time:
      min: 0
      max: 1000
      step: 5
  stack_acquisition:
    step_size:
      min: 0.100
      max: 1000
      step: 0.1
    start_pos:
      min: -5000
      max: 5000
      step: 1
    end_pos:
      min: -5000
      max: 10000
      step: 1
  timepoint:
    timepoints:
      min: 1
      max: 1000
      step: 1
    stack_pause:
      min: 0
      max: 1000
      step: 1
