%YAML 1.2
---

DAQParameters:
  #NI or SyntheticDAQ
  hardware_type: NI

  # triggers
  master_trigger_out_line: PXI6259/port0/line1
  camera_trigger_out_line: PXI6259/ctr0
  trigger_source: PXI6259/PFI0
  galvo_etl_task_line: PXI625/ao0:3
  laser_task_line: PXI6733/ao0:7

  # galvos
  galvo_l_ao: PXI6259/ao0
  galvo_r_ao: PXI6259/ao1

  # Remote Focusing Systems
  etl_l_ao: PXI6259/ao2

  voice_coil_min_ao: -10
  voice_coil_max_ao: 10
  voice_coil: PXI6259/ao3

  number_of_lasers : 3

  laser_min_ao: 0
  laser_max_ao: 5
  laser_min_do: 0
  laser_max_do: 5

  laser_port_switcher: PXI6733/port0/line0

  laser_0_wavelength: 488nm
  laser_0_index: 0
  laser_0_do: PXI6733/port0/line2
  laser_0_ao: PXI6733/port0/line5

  laser_1_wavelength: 562nm
  laser_1_index: 1
  laser_1_do: PXI6733/port0/line3
  laser_1_ao: PXI6733/port0/line6

  laser_2_wavelength: 642nm
  laser_2_index: 2
  laser_2_do: PXI6733/port0/line4
  laser_2_ao: PXI6733/port0/line7

  # shutters
  shutter_min_do: 0
  shutter_max_do: 5
  shutter_left: PXI6259/port0/line0
  shutter_right: PXI6259/port2/line0

CameraParameters:
  # SyntheticCamera or HamamatsuOrca
  type: HamamatsuOrca
  number_of_cameras: 1
  x_pixels: 2048
  y_pixels: 2048
  x_pixel_size_in_microns: 6.5
  y_pixel_size_in_microns: 6.5
  subsampling: [1, 2, 4]
  sensor_mode: 12  # 12 for progressive
  defect_correct_mode: 2
  binning: 1x1
  readout_speed: 1
  trigger_active: 1
  trigger_mode: 1 # it is unclear if this is the external lightsheet mode - how to check this?
  trigger_polarity: 2  # positive pulse
  trigger_source: 2  # external

ETLParameters:
  #ETL or SyntheticETL
  type: ETL
  number_of_etls: 1
  etl_l_delay_percent: 7.5
  etl_l_ramp_rising_percent: 85
  etl_l_ramp_falling_percent: 2.5
  etl_l_amplitude: 0.7
  etl_l_offset: 2.3
  etl_l_min_ao: 0
  etl_l_max_ao: 5

FilterWheelParameters:
  #Sutter or SyntheticFilterWheel
  type: Sutter
  filter_wheel_port: COM9
  baudrate: 9600
  number_of_filter_wheels: 2
  filter_wheel_delay: .030 # in seconds
  available_filters: {
    Empty-Alignment: 0,
    GFP - FF01-515/30-32: 1,
    RFP - FF01-595/31-32: 2,
    Far-Red - BLP01-647R/31-32: 3,
    Blocked1: 4,
    Blocked2: 5,
    Blocked3: 6,
    Blocked4: 7,
    Blocked5: 8,
    Blocked6: 9
  }

GalvoParameters:
  # Digitally Scanned Galvo for MesoSPIM Module
  galvo_l_frequency: 99.9
  galvo_l_amplitude: 2.5
  galvo_l_offset: 0
  galvo_l_duty_cycle: 50
  galvo_l_phase: np.pi / 2
  galvo_l_min_ao: -5
  galvo_l_max_ao: 5

  # Shadow Reduction Galvo for NanoSPIM Module
  galvo_r_amplitude: 0.5
  galvo_r_min_ao: -5
  galvo_r_max_ao: 5

StageParameters:
  # PI or SyntheticStage
  type: PI
  controllername: 'C-884'
  stages: L-509.20DG10 L-509.40DG10 L-509.20DG10 M-060.DG M-406.4PD NOSTAGE #('L-509.20DG10', 'L-509.40DG10', 'L-509.20DG10', 'M-060.DG', 'M-406.4PD', 'NOSTAGE')
  refmode: FRF FRF FRF FRF FRF FRF
  serialnum: 119060508
  y_unload_position: 10000
  y_load_position: 90000
  startfocus: 70700
  x_max: 50000
  x_min: 2000
  y_max: 100000
  y_min: 2000
  z_max: 50000
  z_min: 2000
  f_max: 100000
  f_min: 2000
  theta_max: 360
  theta_min: 0
  x_rot_position: 2000
  y_rot_position: 2000
  z_rot_position: 2000
  xy_step: 500
  z_step: 500
  theta_step: 30
  f_step: 500
  position: {
    x_pos: 35000,
    y_pos: 42000,
    z_pos: 15500,
    f_pos: 70000,
    theta_pos: 0
  }
  velocity: 1000

ZoomParameters:
  #Dynamixel or SyntheticZoom
  type: Dynamixel
  servo_id: 1
  COMport: COM21
  baudrate: 1000000
  zoom_position: {
    0.63x: 0,
    1x: 627,
    2x: 1711,
    3x: 2301,
    4x: 2710,
    5x: 3079,
    6x: 3383
  }
  low_res_zoom_pixel_size: {
    0.63x: 9.7,
    1x: 6.38,
    2x: 3.14,
    3x: 2.12,
    4x: 1.609,
    5x: 1.255,
    6x: 1.044
  }
  high_res_zoom_pixel_size: 0.167

SharedMemoryAllocation:
  vol_per_buffer: 1
  num_data_buffers: 2  # increase for multiprocessing
  num_snap: 1  # interbuffer time limited by ao play
  images_per_buffer: 1
  bytes_per_data_buffer: images_per_buffer * 6000 * 4000 * 2
  bytes_per_preview_buffer: bytes_per_data_buffer * 3

StartupParameters:
  number_of_channels: 5
  state: init  # init, idle, live, snap, running_script
  sweeptime: 0.2
  samplerate: 100000
  zoom: 1x
  pixelsize: 6.55
  shutterstate: False  # Is the shutter open or not?
  shutterconfig: Left  # Can be "Left" "Right" "Both" "Interleaved"

  # Default Laser Parameters
  laser: 488 nm
  intensity: 10
  laser_l_delay_percent: 10
  laser_l_pulse_percent: 87
  laser_r_delay_percent: 10
  laser_r_pulse_percent: 87


  # Camera Specific Startup Parameters
  camera_line_interval: 0.000075
  camera_exposure_time: 200 # in ms
  ASLM_from_volt: 0  # first voltage applied at remote mirror
  ASLM_to_volt: 1  # voltage applied at remote mirror at the end of sawtooth
  ASLM_current_volt: 0  # current voltage applied to remote mirror
  ASLM_static_low_res_volt: 0  # default ASLM low res voltage
  ASLM_static_high_res_volt: 0  # default ASLM high res voltage
  ASLM_alignment_on: 0  # param=1 if ASLM alignment mode is on, otherwise zero
  ASLM_delay_before_voltage_return: 0.001  # 1ms
  ASLM_additional_return_time: 0.001  # 1ms
  camera_delay_percent: 10
  camera_pulse_percent: 1
  camera_exposure_time: 200 #milliseconds
  camera_line_interval: 0.000075
  camera_display_live_subsampling: 1
  camera_display_snap_subsampling: 1
  camera_display_acquisition_subsampling: 2
  camera_binning: 1x1
  camera_sensor_mode: ASLM
  average_frame_rate: 4.969